PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = Tse_Altarriba_Simon
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Routines
  Routine Expt_Instructions
    TextComponent exptinstr
      color = pink
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will see an arrow.
        Your job is to decide which direction the arrow is pointing to.
        If the arrow is pointing to the RIGHT, press M
        If the arrow is pointing to the LEFT, press Z
        Ignore the location, just focus on the direction.
        We will start with a few practice trials.
        Press the space bar to continue.
    KeyboardComponent Space2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Begin_Experiment
    TextComponent text
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Practice over. Are you ready to start the experiment?
        Remember to pay attention only to the direction that the arrow is pointing to!
        You will not get feedback from now on.
        Press the space bar when you are ready.
    KeyboardComponent Space3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Initial_instruction
    TextComponent initialinstr
      color = pink
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        The experiment is about to begin.
        Press the space bar for the instructions.
    KeyboardComponent Space1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
    TextComponent TheEnd
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = All done. Thank you!
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  Routine Feedback
    CodeComponent code
      Code Type = JS
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    TextComponent Feedback_2
      color = pink
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine PracticeFix
    ImageComponent imageFix
      image [set every repeat] = Fixation.jpeg
      size = (1, 1)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.5
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  Routine PracticeTrials
    ImageComponent imagePractice
      image [set every repeat] = $ImageFile
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp
      allowedKeys = 'm', 'z'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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  Routine ExperimentFix
    ImageComponent imageFixation
      image [set every repeat] = Fixation.jpeg
      size = (1, 1)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.5
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  Routine ExpTrials
    ImageComponent imageTrials
      image [set every repeat] = $ImageFile
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp_2
      allowedKeys = 'm', 'z'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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  Routine Break
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Take a little break and press the space bar when you are ready to continue
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    KeyboardComponent Space4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Initial_instruction
  Routine Expt_Instructions
  LoopInitiator Practice_loop loopType="TrialHandler"
    conditionsFile = SimonPractice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/IncongruentLeft.jpeg'), ('Condition', 'Incongruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/IncongruentLeft.jpeg'), ('Condition', 'Incongruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/IncongruentRight.jpeg'), ('Condition', 'Incongruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/IncongruentRight.jpeg'), ('Condition', 'Incongruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/NeutralLeft.jpeg'), ('Condition', 'Neutral Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/NeutralLeft.jpeg'), ('Condition', 'Neutral Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/NeurtalRight.jpeg'), ('Condition', 'Neutral Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/NeurtalRight.jpeg'), ('Condition', 'Neutral Right'), ('CorrAns', 'm')])]
    Routine PracticeFix
    Routine PracticeTrials
  LoopTerminator Practice_loop
  Routine Begin_Experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SimonStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')])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
    Routine ExperimentFix
    Routine ExpTrials
  LoopTerminator trials
  Routine Break
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = SimonStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')])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
    Routine ExperimentFix
    Routine ExpTrials
  LoopTerminator trials_2
  Routine Thanks
