PsychoPy2experiment version="2021.2.3"
Settings
  Completed URL = $"https://ucl-ioephd.sona-systems.com/webstudy_credit.aspx?experiment_id=28&credit_token=98436a24aed540768d32a20d28ab69fb&survey_code=" + expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Use version = latest
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = Tse_Altarriba_Simon1
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Routines
  Routine Expt_Instructions
    TextComponent exptinstr
      color = pink
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will see an arrow.
        Your job is to decide which direction the arrow is pointing to.
        If the arrow is pointing to the RIGHT, press M
        If the arrow is pointing to the LEFT, press Z
        Ignore the location, just focus on the direction.
        We will start with a few practice trials.
        Press the space bar to continue.
    KeyboardComponent Space2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Begin_Experiment
    TextComponent text
      color = pink
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Practice over. Are you ready to start the experiment?
        Remember: If the arrow is pointing to the RIGHT, press M.
        If the arrow is pointing to the LEFT, press Z.
        You will not get feedback from now on.
        Press the space bar when you are ready.
        If you no longer wish to participate, press esc. Your data will not be saved.
    KeyboardComponent Space3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Initial_instruction
    TextComponent initialinstr
      color = pink
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        The experiment is about to begin.
        Press the space bar for the instructions.
    KeyboardComponent Space1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
    TextComponent TheEnd
      color = pink
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        All done. Thank you!
        Please wait for the experiment to finish saving your data.
  Routine Feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if not response.keys :
            msg="Failed to respond"
        elif response.corr:#stored on last run routine
            msg="Correct!"
        else:
            msg="Oops! That was wrong"
    TextComponent Feedback_2
      color = pink
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine PracticeFix
    ImageComponent imageFix
      image [set every repeat] = Fixation.jpeg
      size = (1, 1)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.5
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  Routine PracticeTrials
    ImageComponent imagePractice
      image [set every repeat] = $ImageFile
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent response
      allowedKeys = 'm', 'z'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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  Routine ExperimentFix
    ImageComponent imageFixation
      image [set every repeat] = Fixation.jpeg
      size = (1, 1)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.5
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  Routine ExpTrials
    ImageComponent imageTrials
      image [set every repeat] = $ImageFile
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp_2
      allowedKeys = 'm', 'z'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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  Routine Break
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Take a little break and press the space bar when you are ready to continue
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    KeyboardComponent Space4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Initial_instruction
  Routine Expt_Instructions
  LoopInitiator Practice_loop loopType="TrialHandler"
    conditionsFile = SimonPractice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/IncongruentLeft.jpeg'), ('Condition', 'Incongruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/IncongruentLeft.jpeg'), ('Condition', 'Incongruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/IncongruentRight.jpeg'), ('Condition', 'Incongruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/IncongruentRight.jpeg'), ('Condition', 'Incongruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/NeutralLeft.jpeg'), ('Condition', 'Neutral Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/NeutralLeft.jpeg'), ('Condition', 'Neutral Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/NeurtalRight.jpeg'), ('Condition', 'Neutral Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/NeurtalRight.jpeg'), ('Condition', 'Neutral Right'), ('CorrAns', 'm')])]
    Routine PracticeFix
    Routine PracticeTrials
    Routine Feedback
  LoopTerminator Practice_loop
  Routine Begin_Experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SimonStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')])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
    Routine ExperimentFix
    Routine ExpTrials
  LoopTerminator trials
  Routine Break
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = SimonStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentLeft.jpeg'), ('Condition', 'Congruent Left'), ('CorrAns', 'z')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')]),
      OrderedDict([('ImageFile', 'Images/CongruentRight.jpeg'), ('Condition', 'Congruent Right'), ('CorrAns', 'm')])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
    Routine ExperimentFix
    Routine ExpTrials
  LoopTerminator trials_2
  Routine Thanks
